/* -----------------------------------------------------------------------------
BallAndStick.hoc
----------------------------------------------------------------------------- */
// Create sections:
create soma[1]
create dend[1]

// Add 3D information:
soma[0] {
    pt3dadd(0, 0, -15, 30)
    pt3dadd(0, 0, 15, 30)
}

dend[0] {
    pt3dadd(0, 0, 15, 3)
    pt3dadd(0, 0, 115, 3) // shorten the dend branch for inhibitory cells
    // pt3dadd(0, 0, 1015, 3)
}

// Connect section end points:
connect dend[0](0), soma[0](1)

// Set biophysical parameters:
forall {
    Ra = 100.
    cm = 1.
    all.append()
}

soma {
  insert pas
  g_pas = 0.0003
  e_pas = -54.3
}


dend {
  insert pas
  g_pas = 0.0002
  e_pas = -65.
}
